PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': "['practice', '1', '2', '3']", 'which eye is blue': "['right', 'left']", 'eye tested': "['right', 'left']", 'previous contrast': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1440, 900]
  color = black
  expName = eyeDomExp
  exportHTML = on Save
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Routines
  Routine contWarning
    CodeComponent checkInputCont
      Code Type = Auto->JS
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      Begin Routine:
        #display txt to verify the calculated contrast was properly input
        if expInfo['previous contrast'] =='' and expInfo['session']!='practice':
            txtVar = 'You did not input the correct contrast value.  Please restart the session and input the value you wrote down from the practice session to the last entry of the dialog box'
            continueRoutine = True
        else:
            continueRoutine=False
            txtVar='' #this has to always be defined
    TextComponent warningESC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $txtVar
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  Routine findScreenResol
    CodeComponent JScode
      Code Type = JS
      Begin JS Experiment:
        //make python online friendly
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;
        random=Math.random;
        sort = function(array) {
            return array.sort((a, b) => (a - b));
        }
        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }
        range = function (size, startAt = 0) {
            return [...Array(size).keys()].map(i => i + startAt);
        }
        Array.prototype.index = [].indexOf;
        sum = (arr) => arr.reduce((a,b)=>a+b)
        tan = Math.tan;
    CodeComponent pxPerCmCode
      Code Type = Auto->JS
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      Begin Experiment:
        x_pix = 400
        pxPerCm = x_pix/8.56 #8.56 is standard size of credit card width
        pxChange = 1
      Each Frame:
        keys=event.getKeys()
        #calculate the pixels per cm from the actual size of the card
        if len(keys):
            if 'up' in keys:
                x_pix = x_pix + pxChange
            elif 'down' in keys:
                x_pix = x_pix - pxChange
            pxPerCm = x_pix/8.56     # divide num of pixels
                                                   # wide by the size in cm
                                                   # of standard card to get
                                                   # resolution (px/cm)
      End Routine:
        thisExp.addData('px per cm', pxPerCm)
    TextComponent instructTop
      letterHeight = .05
      pos = (0, .7)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Please use a credit card or any card of the same size (drivers license, grocery store membership card, etc.)

        Hold it onto the screen, and adjust the image on screen to match the size of your card.

        (If you don't have access to a real card, you can use a ruler to measure image width to 3.37inch or 85.6mm, or make your best guess!)
    TextComponent instructBottom
      letterHeight = .05
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        UP arrow = Bigger
        DOWN arrow = Smaller

        Click “Next” when done
    ImageComponent cardImage
      image = images/bankImage.png
      saveStartStop = False
      size [set every frame] = $(x_pix, x_pix * 0.6265625)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    PolygonComponent line_R_vert
      fillColor = $[1,1,1]
      pos [set every frame] = (x_pix/2, 0)
      shape = regular polygon...
      size [set every frame] = (1, (x_pix * 0.6304906542)+80)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_L_vert
      fillColor = $[1,1,1]
      pos [set every frame] = (-x_pix/2, 0)
      shape = regular polygon...
      size [set every frame] = (1, (x_pix * 0.6304906542)+80)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_T_horiz
      fillColor = $[1,1,1]
      pos [set every frame] = (0, (x_pix * 0.6304906542)/2)
      shape = regular polygon...
      size [set every frame] = (x_pix +80, 1)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_B_horiz
      fillColor = $[1,1,1]
      pos [set every frame] = (0, -(x_pix * 0.6304906542)/2)
      shape = regular polygon...
      size [set every frame] = (x_pix +80, 1)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent nextPoly
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (.8, -.8)
      shape = rectangle
      size = (0.12, 0.06)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent nextButton
      color = black
      letterHeight = 0.05
      pos = (.8, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Next
      units = norm
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    MouseComponent nextMouse
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine findScreenEdge
    TextComponent instruct
      letterHeight = 0.05
      pos = (0, .7)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Click and slide the red circle so that it lines up with the blue line.

        Once they are aligned click “Next”.
    SliderComponent slider
      borderColor = white
      color = white
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (-1.4, .07)
      saveStartStop = False
      size = (3.2, 0.07)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45', 'triangleMarker')
      styles = slider
      ticks = (-1,-.5,0)
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    CodeComponent scrnEdgeCode
      Code Type = Auto->JS
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      Begin Experiment:
        screenEdgePx = 0.0
        skip_checkEdge = False

        # note that this code has to go below the slider
        # in builder or else the marker doesn't show
        # until you click on the slider bar
      Begin Routine:
        slider.markerPos=0
      End Routine:
        screenEdgeNorm = slider.getRating()
        screenEdgePx = 10000*screenEdgeNorm

        if screenEdgeNorm<0:
            skip_checkEdge = True
            screenEdgeLoop.finished = True

        thisExp.addData('screenEdgeNorm', screenEdgeNorm)
        thisExp.addData('screenEdgePx', screenEdgePx)
    PolygonComponent targetTri
      fillColor = $[-1,-1,1]
      lineColor = $[-1,-1,1]
      nVertices = 3
      pos = (-.95, 0)
      shape = triangle
      size = (0.09, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent nextPoly1
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      pos = (0.8, -.8)
      shape = rectangle
      size = (0.12, 0.06)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent nextButton1
      color = black
      letterHeight = 0.05
      pos = (.8, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = Next
      units = norm
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    MouseComponent nextMouse1
      clickable = nextButton1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine checkScreenEdge
    CodeComponent checkEdgCode
      Code Type = Auto->JS
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      Each Frame:
        if skip_checkEdge==True:
            continueRoutine = False

        # if spacebar is hit locally before moving triangle
        # you get a crash, but if online, you get a screen
        # asking you to align the red arrow to the blue

        # also slider looks like trash locally, but good
        # online which is where it matters
    TextComponent instructPls
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please move the red triangle to line up with the blue arrow before continuing.
    PolygonComponent tryAgainPoly
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (0.8, -0.8)
      shape = rectangle
      size = (0.15, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent tryAgainButton
      color = black
      letterHeight = 0.05
      pos = (.8, -.8)
      startVal [time (s)] = 0.0
      text [set every frame] = Try again
      units = norm
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    MouseComponent tryAgainMouse
      clickable = tryAgainButton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine startBlindSpot
    CodeComponent setParams
      Code Type = Auto->JS
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      Begin Experiment:
        num_repeat = 3 # how many trials to avg over
        dot2square_dist = 6 # in cm, choose; default was 6cm
        square2center_dist = 9 # in cm right of center, choose; default was 6cm

        desiredVisAngl = 0.029147 # in radians; paper says within 1.67 deg

        # better to choose params here since other code
        # component in findBlindSpot is type "both"
    CodeComponent startBSCode
      Code Type = Auto->JS
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      Begin Experiment:
        loopN = 0
      Begin Routine:
        square_x = pxPerCm * square2center_dist # it is important to have this defined here and not in begin exp where original incorrect pxPerCm will be used
        loopN = 0     # yes need it in both places
        clickedRestart = False
    ImageComponent instruct1
      image = images/instruct1.png
      pos [set every frame] = (0, pxPerCm*3.5)
      size [set every frame] = (pxPerCm*20, pxPerCm*7.09)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    KeyboardComponent startKey
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent squareStart
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every frame] = (square_x, -pxPerCm*3)
      shape = rectangle
      size [set every frame] = (pxPerCm*.6, pxPerCm*.6)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent dotStart
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 20
      pos [set every frame] = (square_x - (pxPerCm * dot2square_dist), -pxPerCm*3)
      shape = regular polygon...
      size [set every frame] = (pxPerCm*.6, pxPerCm*.6)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent tinyDotStart
      fillColor = $[1,1,1]
      nVertices = 10
      pos [set every frame] = (square_x, -pxPerCm*3)
      shape = regular polygon...
      size [set every frame] = (pxPerCm*.1, pxPerCm*.1)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent dumiTrialCount
      color = blue
      letterHeight = 0.07
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        $f"0 out of {num_repeat}"
    PolygonComponent dumiRestrtPoly
      fillColor = $[-.3,-.3,-.3]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (.7, -.8)
      shape = rectangle
      size = (0.4, 0.14)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent dumiRestrtButt
      letterHeight = 0.05
      pos = (0.7, -0.8)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        click here to start over
        (if you made a mistake)
  Routine findBlindSpot
    CodeComponent blindSpotCode
      Code Type = Both
      Begin Experiment:
        dot_dist_list = []
        dist2screen = 0
      Begin JS Experiment:
        dot_dist_list = [];
        dist2screen = 0;
      Begin JS Routine:
        dot_x = (square_x - (pxPerCm * dot2square_dist));
        square_x = (pxPerCm * square2center_dist);
        loopN += 1;
      Begin Routine:
        dot_x =  square_x - (pxPerCm * dot2square_dist)
        square_x = pxPerCm * square2center_dist # it is important to have this defined here and not in begin exp where original incorrect pxPerCm will be used

        loopN += 1
      Each Frame:
        if dot_x>screenEdgePx:
            dot_x = dot_x-1

        else:
            continueRoutine = False
            inLoop.finished = True
            midLoop.finished = True
      Each JS Frame:
        if ((dot_x > screenEdgePx)) {
            dot_x = (dot_x - 1);
        } else {
            continueRoutine = false;
            inLoop.finished = true;
            midLoop.finished = true;
        }
      End JS Routine:
        dot_dist_list.push((square2center_dist*pxPerCm)-dot_x)
        avg_dot_dist = (sum(dot_dist_list.slice((- num_repeat))) / num_repeat);
        dot_dist_cm = (avg_dot_dist / pxPerCm);
        dist2screen = (dot_dist_cm / 0.24);

        thisExp.addData("num_repeat", num_repeat);
        thisExp.addData("square_x", square_x);
        thisExp.addData("square2center_dist", square2center_dist);
        thisExp.addData("dot2square_dist", dot2square_dist);
        thisExp.addData("dot_dist_list", dot_dist_list);
        thisExp.addData("avg_dot_dist", avg_dot_dist);
        thisExp.addData("dist2screen", dist2screen);
      End Routine:
        dot_dist_list.append((square2center_dist*pxPerCm)-dot_x)
        avg_dot_dist = sum(dot_dist_list[-num_repeat:])/num_repeat # only avg the last n valid rounds
        dot_edge_dist = avg_dot_dist - ((pxPerCm*.6)/2) # need dist to right-most edge of dot, not center
        # note that I haven't implemented this ^ in the js code, b/c the diff is negligible, & if anything the est dist is usually shorter than reality
        dot_dist_cm = dot_edge_dist/pxPerCm
        dist2screen = dot_dist_cm/.24 # the angle between
        # fovea and blind spot in eye is usually around
        # 13.5 degrees (tan(13.5) = .24)

        thisExp.addData('num_repeat', num_repeat)
        thisExp.addData('square_x', square_x)
        thisExp.addData('square2center_dist', square2center_dist)
        thisExp.addData('dot2square_dist', dot2square_dist)
        thisExp.addData('dot_dist_list', dot_dist_list)
        thisExp.addData('avg_dot_dist', avg_dot_dist)
        thisExp.addData('dist2screen', dist2screen)
    PolygonComponent square
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every frame] = (square_x, -pxPerCm*3)
      shape = rectangle
      size [set every frame] = (pxPerCm*.6, pxPerCm*.6)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent dot
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 20
      pos [set every frame] = (dot_x, -pxPerCm*3)
      shape = regular polygon...
      size [set every frame] = (pxPerCm*.6, pxPerCm*.6)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent tinyDot
      fillColor = $[1,1,1]
      nVertices = 10
      pos [set every frame] = (square_x, -pxPerCm*3)
      shape = regular polygon...
      size [set every frame] = (pxPerCm*.1, pxPerCm*.1)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent endRound
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent trialCounter
      color = blue
      letterHeight = 0.07
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      units = norm
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      text [set every frame]:
        $f"{loopN} out of {num_repeat}"
    PolygonComponent restartPoly
      fillColor = $[-.3,-.3,-.3]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (.7, -.8)
      shape = rectangle
      size = (0.4, 0.14)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent restartText
      letterHeight = 0.05
      pos = (0.7, -0.8)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        click here to start over
        (if you made a mistake)
    MouseComponent restartMouse
      clickable = restartText
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine checkForRestart
    CodeComponent breakLoop
      Code Type = Auto->JS
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      Begin Experiment:
        skipTrials = False
        clickedRestart = False
      Begin Routine:
        if restartMouse.clicked_name:
            if restartMouse.clicked_name[0] =='restartText':
                inLoop.finished = True
                clickedRestart = True

        if loopN ==num_repeat and dot_x>screenEdgePx and clickedRestart == False:
            continueRoutine = False
            inLoop.finished = True
            midLoop.finished = True
            outerLoop.finished = True
            skipTrials = True
  Routine warning
    CodeComponent oopsCode
      Code Type = Auto->JS
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      Each Frame:
        if skipTrials==True:
            continueRoutine = False
    TextComponent instructOops
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        oops! Looks like we ran out of space.

        Try moving a little closer to the screen and click the button to try again.
    PolygonComponent tryAgainPoly1
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (.8, -.8)
      shape = rectangle
      size = (0.15, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent tryAgainButton1
      color = black
      letterHeight = 0.05
      pos = (0.8, -0.8)
      startVal [time (s)] = 0.0
      text [set every frame] = Try again
      units = norm
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    MouseComponent tryAgainMouse1
      clickable = tryAgainButton1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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Flow
  Routine contWarning
  LoopInitiator screenEdgeLoop loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine findScreenResol
    Routine findScreenEdge
  LoopTerminator screenEdgeLoop
  LoopInitiator outerLoop loopType="TrialHandler"
    loopType = random
    nReps = 20
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    LoopInitiator midLoop loopType="TrialHandler"
      loopType = random
      nReps = 50
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      Routine startBlindSpot
      LoopInitiator inLoop loopType="TrialHandler"
        loopType = sequential
        nReps = num_repeat
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        Routine findBlindSpot
        Routine checkForRestart
      LoopTerminator inLoop
    LoopTerminator midLoop
    Routine warning
  LoopTerminator outerLoop
